PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = Robyn_PsychoPy_Negative_Music
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Routines
  Routine Introduction
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome and thank you for participating in this task.

        For this task, you will need a pair of headphones or earbuds with the volume set to just over halfway. It should be loud enough that you can hear it well but not so loud that you hurt yourself. You will be instructed when to put the headphones on and when to take them off.

        On each trial, you will see a central fixation cross followed by two faces. A dot will appear behind one of these faces and your job is to press the key that corresponds to the side of the dot. Please be as quick and accurate as possible.

        If the dot is behind the left-hand picture, press the left arrow

        If the dot is behind the right-hand picture, press the right arrow

        When you are ready, press the space bar to start the practice trial.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine No_Music_Trials
    TextComponent FC_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent No_Mus_IMG_L
      image [set every repeat] = $No_Mus_Img_L
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent No_Mus_IMG_R
      image [set every repeat] = $No_Mus_Img_R
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    TextComponent No_Mus_Dot
      letterHeight = 0.1
      pos [set every repeat] = $No_Mus_Dot_Pos
      startVal [time (s)] = 1.025
      stopVal [duration (s)] = 0.5
      text [set every repeat] = .
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  Routine Music_Trials
    TextComponent Mus_FC
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent Mus_Img_L
      disabled = True
      image [set every repeat] = $Image_L
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent Mus_Img_R
      disabled = True
      image [set every repeat] = $Image_R
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    TextComponent Mus_Dot
      disabled = True
      letterHeight = 0.1
      pos [set every repeat] = $Dot_Pos
      startVal [time (s)] = 1.025
      stopVal [duration (s)] = 0.5
      text [set every repeat] = .
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  Routine End
    TextComponent text_4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking part in this section of the experiment.

        Your activity will now be recorded. All you will need to do now is close this tab and continue with the survey.

        press the ‘space’ bar to close the experiment and close the tab.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_Routine
    TextComponent FC_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent Test_Face_L
      image [set every repeat] = $Img_L
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent Test_Face_R
      image [set every repeat] = $Img_R
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    TextComponent Dot
      letterHeight = 0.1
      pos [set every repeat] = $[dotX,dotY]
      startVal [time (s)] = 1.025
      stopVal [duration (s)] = 0.5
      text = .
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  Routine Test_Response
    KeyboardComponent key_resp_2
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break_Before_No_Music
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Siiiick




        Press ‘space’ to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine No_Music_Feedback
  Routine Music_Feedback
  Routine Mood_Slider
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = (0, 10)
      letterHeight = 0.05
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11)
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = please rate your mood right now where 0 is negative and 10 is positive. Then there are faces on each end of slider
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    ImageComponent image_3
      image = Emoji_Icon_-_Sad_Emoji_grande.webp
      pos = (-0.5, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = Happy_Emoji_Icon_5c9b7b25-b215-4457-922d-fef519a08b06_large.webp
      pos = (0.5, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine Break
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        That concludes the practice trials.

        When you are ready, press the ‘space’ bar to move on to the full set of trials.
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Music_2
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 150
      text = Please sit back, relax and enjoy the music.
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 150
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    SoundComponent sound_1
      sound [set every repeat] = PositiveMusic.mp3
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 150
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      text:
        Thank you for listening. Please remove your headphones.

        Press the ‘space’ bar to continue
  Routine Mood_Slider_2
    TextComponent text_8
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = please rate your mood right now where 0 is negative and 10 is positive
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 0
      initVal = 6
      labels = (0, 10)
      letterHeight = 0.05
      size = (0.85, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11)
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    ImageComponent image
      image = Emoji_Icon_-_Sad_Emoji_grande.webp
      pos = (-0.5, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = Happy_Emoji_Icon_5c9b7b25-b215-4457-922d-fef519a08b06_large.webp
      pos = (0.5, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine Intro_Slider
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now be asked to indicate your mood.

        press the ’space’ bar to continue
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_Experiment_Instructions
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your response.

        You will now be shown a set of faces and a dot will appear. Your task is to press either the left arrow key, or the right arrow key to show which side the dot appeared on.

        You will now be shown 5 test trials to get used to the experiment.

        Press the ‘space’ bar to continue.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_Music
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please put on some headphones and make sure your volume is turned half way up.

        You are going to listen to a piece of music. Simply sit back and relax.


        Press the ‘space’ bar to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break_2
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are now going to complete a set of trials similar to the ones you completed prior to listening to the music.

        press the ‘space’ bar to continue
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Mood_Slider_3
    SliderComponent slider_3
      forceEndRoutine = True
      granularity = 0
      labels = (0, 10)
      letterHeight = 0.05
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11)
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    TextComponent text_13
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = please rate your mood right now where 0 is negative and 10 is positive. Then there are faces on each end of slider
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    ImageComponent image_5
      image = Emoji_Icon_-_Sad_Emoji_grande.webp
      pos = (-0.5, 0.0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image = Happy_Emoji_Icon_5c9b7b25-b215-4457-922d-fef519a08b06_large.webp
      pos = (0.5, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine Mood_Slider_4
    SliderComponent slider_4
      forceEndRoutine = True
      granularity = 0
      labels = (0, 10)
      letterHeight = 0.05
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11)
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    TextComponent text_14
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = please rate your mood right now where 0 is negative and 10 is positive. Then there are faces on each end of slider
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    ImageComponent image_7
      image = Emoji_Icon_-_Sad_Emoji_grande.webp
      pos = (-0.5, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_8
      image = Happy_Emoji_Icon_5c9b7b25-b215-4457-922d-fef519a08b06_large.webp
      pos = (0.5, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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Flow
  Routine Introduction
  Routine Intro_Slider
  Routine Mood_Slider
  Routine Instructions_Experiment_Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = EDP_EXCEL_3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Img_L': 'AF09NES.JPG', 'Img_R': 'AF09ANS.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': 'PositiveMusic.mp3', 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF09NES.JPG', 'Img_R': 'AF09NES.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': 'NegativeMusic.mp3', 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF14NES.JPG', 'Img_R': 'AF14ANS.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF35ANS.JPG', 'Img_R': 'AF35NES.JPG', 'Dot_Pos': (0.5, 0), 'LR': 1, 'corrAns': 'Right', 'Music': None, 'dotX': 0.5, 'dotY': 0},
      {'Img_L': 'AM01ANS.JPG', 'Img_R': 'AM01NES.JPG', 'Dot_Pos': (0.5, 0), 'LR': 1, 'corrAns': 'Right', 'Music': None, 'dotX': 0.5, 'dotY': 0}]
    Routine Test_Routine
    Routine Test_Response
  LoopTerminator trials
  Routine Break
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = EDP_EXCEL_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Img_L': 'AF09NES.JPG', 'Img_R': 'AF09ANS.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': 'PositiveMusic.aif', 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF09NES.JPG', 'Img_R': 'AF09NES.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': 'NegativeMusic.aif', 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF14NES.JPG', 'Img_R': 'AF14ANS.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF14NES.JPG', 'Img_R': 'AF14NES.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF22NES.JPG', 'Img_R': 'AF22ANS.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF22NES.JPG', 'Img_R': 'AF22NES.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF23NES.JPG', 'Img_R': 'AF23ANS.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF23NES.JPG', 'Img_R': 'AF23NES.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF25NES.JPG', 'Img_R': 'AF25ANS.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF25NES.JPG', 'Img_R': 'AF25NES.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0}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
    Routine Test_Routine
    Routine Test_Response
  LoopTerminator trials_2
  Routine Intro_Slider
  Routine Mood_Slider_3
  Routine Instructions_Music
  Routine Music_2
  Routine Intro_Slider
  Routine Mood_Slider_4
  Routine Break_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = EDP_EXCEL_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Img_L': 'AF09NES.JPG', 'Img_R': 'AF09ANS.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': 'PositiveMusic.aif', 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF09NES.JPG', 'Img_R': 'AF09NES.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': 'NegativeMusic.aif', 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF14NES.JPG', 'Img_R': 'AF14ANS.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF14NES.JPG', 'Img_R': 'AF14NES.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF22NES.JPG', 'Img_R': 'AF22ANS.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF22NES.JPG', 'Img_R': 'AF22NES.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF23NES.JPG', 'Img_R': 'AF23ANS.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF23NES.JPG', 'Img_R': 'AF23NES.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF25NES.JPG', 'Img_R': 'AF25ANS.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0},
      {'Img_L': 'AF25NES.JPG', 'Img_R': 'AF25NES.JPG', 'Dot_Pos': (-0.5, 0), 'LR': 0, 'corrAns': 'Left', 'Music': None, 'dotX': -0.5, 'dotY': 0}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
    Routine Test_Routine
    Routine Test_Response
  LoopTerminator trials_3
  Routine End
